<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:p1="clr-namespace:Harp.SoundCard;assembly=Harp.SoundCard"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
        <rx:Name>sound command</rx:Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:Device">
          <harp:OperationMode>Active</harp:OperationMode>
          <harp:OperationLed>On</harp:OperationLed>
          <harp:DumpRegisters>true</harp:DumpRegisters>
          <harp:VisualIndicators>On</harp:VisualIndicators>
          <harp:Heartbeat>Disabled</harp:Heartbeat>
          <harp:IgnoreErrors>false</harp:IgnoreErrors>
          <harp:PortName>COM11</harp:PortName>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>LButton ShiftKey ControlKey A P Q Alt</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>false</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="io:CsvReader">
        <io:FileName>C:\Users\svc_aind_behavior\Documents\ForagingSettings\SoundAttenuation.csv</io:FileName>
        <io:ScanPattern>%h</io:ScanPattern>
        <io:SkipRows>0</io:SkipRows>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="AttenuationLeft" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="p1:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="p1:CreateAttenuationLeftPayload">
          <p1:AttenuationLeft>400</p1:AttenuationLeft>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>sound command</Name>
      </Expression>
      <Expression xsi:type="p1:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="p1:CreatePlaySoundOrFrequencyPayload">
          <p1:PlaySoundOrFrequency>4</p1:PlaySoundOrFrequency>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>sound command</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="6" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source2" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>